PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.2
  Window size (pixels) = [1920, 1080]
  expName = stroop
  keyboardBackend = ioHub
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Routines
  Routine welcome
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    TextComponent textWelcomemessage
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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      text:
        Welcome to the experiment

        Press ' Spacebar ' to start
  Routine trial_2
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    PolygonComponent fixation
      fillColor = white
      shape = circle
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r','g','b','y'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = all keys
      storeCorrect = True
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  Routine Thanks
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1
      text = Thank you for your participating
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Flow
  Routine welcome
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 20
    random seed = word
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'congruent': None, 'corrAns': None},
      {'word': 'GREEN', 'colour': 'green ', 'congruent': 1, 'corrAns': 'g'},
      {'word': 'BLUE', 'colour': 'blue', 'congruent': 1, 'corrAns': 'b'},
      {'word': 'YELLOW', 'colour': 'yellow', 'congruent': 1, 'corrAns': 'y'},
      {'word': 'RED', 'colour': 'red', 'congruent': 1, 'corrAns': 'r'},
      {'word': 'GREEN', 'colour': 'blue', 'congruent': 0, 'corrAns': 'b'},
      {'word': 'BLUE', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'y'},
      {'word': 'YELLOW', 'colour': 'red', 'congruent': 0, 'corrAns': 'r'},
      {'word': 'RED', 'colour': 'green ', 'congruent': 0, 'corrAns': 'g'}]
    Routine trial_2
  LoopTerminator trials
  Routine Thanks
