PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroopExp
  keyboardBackend = ioHub
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Routines
  Routine welcome_screen_
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    TextComponent textWelcomeMessage
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        Welcome to the experiment

        Press " Spacebar" to start
    KeyboardComponent key_Welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine blank_500
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    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
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  Routine stroop_trial
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    TextComponent textStroopWord
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text [set every repeat] = $word
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    KeyboardComponent keyStroop
      allowedKeys = 'r','g','b','y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine blank500
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    TextComponent blamk_500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Goodbye_Screen
    RoutineSettingsComponent Goodbye_Screen
      desc = Thank you for participate
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    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for participating
    KeyboardComponent key_goodbye
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine welcome_screen_
  Routine blank_500
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stroop.stimuli.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'type': 'congruent', 'word': 'RED', 'colour': 'red', 'correct_key': 'r'},
      {'type': 'congruent', 'word': 'GREEN', 'colour': 'green ', 'correct_key': 'g'},
      {'type': 'congruent', 'word': 'BLUE', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'congruent', 'word': 'YELLOW', 'colour': 'yellow', 'correct_key': 'y'},
      {'type': 'incongruent', 'word': 'RED', 'colour': 'green ', 'correct_key': 'g'},
      {'type': 'incongruent', 'word': 'GREEN', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'incongruent', 'word': 'BLUE', 'colour': 'yellow', 'correct_key': 'y'},
      {'type': 'incongruent', 'word': 'YELLOW', 'colour': 'red', 'correct_key': 'r'},
      {'type': 'incongruent', 'word': 'RED', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'incongruent', 'word': 'GREEN', 'colour': 'yellow', 'correct_key': 'y'},
      {'type': 'incongruent', 'word': 'BLUE', 'colour': 'red', 'correct_key': 'r'},
      {'type': 'incongruent', 'word': 'YELLOW', 'colour': 'green ', 'correct_key': 'g'},
      {'type': 'incongruent', 'word': 'RED', 'colour': 'yellow', 'correct_key': 'y'},
      {'type': 'incongruent', 'word': 'GREEN', 'colour': 'red', 'correct_key': 'r'},
      {'type': 'incongruent', 'word': 'BLUE', 'colour': 'green ', 'correct_key': 'g'},
      {'type': 'incongruent', 'word': 'YELLOW', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'congruent', 'word': 'GREEN', 'colour': 'green ', 'correct_key': 'g'},
      {'type': 'congruent', 'word': 'BLUE', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'congruent', 'word': 'YELLOW', 'colour': 'yellow', 'correct_key': 'y'}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
    Routine stroop_trial
    Routine blank_500
  LoopTerminator trials
  Routine Goodbye_Screen
