PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = stroopExp1
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent Target
      color [set every repeat] = $colour
      letterHeight = 0.1
      pos [set every repeat] = (0, 0)
      startVal [time (s)] = 3
      text [set every repeat] = $word
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    KeyboardComponent response
      allowedKeys = 'left','right','up','down'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 3
      storeCorrect = True
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  Routine Welcome
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    TextComponent Instrtext
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
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      text:
        Welcome to the experiment

        Press " Spacebar " to start
  Routine Goodbye
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    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 1
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      text:
        Thnaks for participating
  Routine Instruct
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    TextComponent Instructtext
      letterHeight = 0.05
      startVal [time (s)] = 1
      stopVal [time (s)] = 3
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      text:
        Remember, choose the colour of the letter, ignoring the word.

        left = green
        right = blue
        up = yellow
        down = red
    KeyboardComponent key_resp
      allowedKeys = 'up','left','right','down'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [time (s)] = 3
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Flow
  Routine Welcome
  Routine Instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
    random seed = colour
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'congruent': None, 'corrAns': None},
      {'word': 'GREEN', 'colour': 'green ', 'congruent': 1, 'corrAns': 'left'},
      {'word': 'BLUE', 'colour': 'blue', 'congruent': 1, 'corrAns': 'right'},
      {'word': 'YELLOW', 'colour': 'yellow', 'congruent': 1, 'corrAns': 'up'},
      {'word': 'RED', 'colour': 'red', 'congruent': 1, 'corrAns': 'down'},
      {'word': 'GREEN', 'colour': 'blue', 'congruent': 0, 'corrAns': 'right'},
      {'word': 'BLUE', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'up'},
      {'word': 'YELLOW', 'colour': 'red', 'congruent': 0, 'corrAns': 'down'},
      {'word': 'RED', 'colour': 'green ', 'congruent': 0, 'corrAns': 'right'}]
    Routine trial
  LoopTerminator trials
  Routine Goodbye
