PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = stroopexp1-2
  keyboardBackend = ioHub
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Routines
  Routine trial
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    TextComponent text
      color [set every repeat] = $colour
      font [set every repeat] = $word
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp
      allowedKeys = 'g','b','r','y'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1
      storeCorrect = True
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/user/Desktop/Exp/StroopExp/conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'congruent': None, 'corrAns': None},
      {'word': 'GREEN', 'colour': 'green ', 'congruent': 1, 'corrAns': 'g'},
      {'word': 'BLUE', 'colour': 'blue', 'congruent': 1, 'corrAns': 'b'},
      {'word': 'YELLOW', 'colour': 'yellow', 'congruent': 1, 'corrAns': 'y'},
      {'word': 'RED', 'colour': 'red', 'congruent': 1, 'corrAns': 'r'},
      {'word': 'GREEN', 'colour': 'blue', 'congruent': 0, 'corrAns': 'b'},
      {'word': 'BLUE', 'colour': 'yellow', 'congruent': 0, 'corrAns': 'y'},
      {'word': 'YELLOW', 'colour': 'red', 'congruent': 0, 'corrAns': 'r'},
      {'word': 'RED', 'colour': 'green ', 'congruent': 0, 'corrAns': 'g'}]
    Routine trial
  LoopTerminator trials
